<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='0' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::User Message' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
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					<TaskScript Name='TaskScript' Value='if(!(runsetMode &amp;&amp; GetGlobalObject().settings.doOffDeckIncubation)) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Usr message' />
						<Parameter Category='' Name='Body' Value='When the incubation has finished return the sample plate to position 5. Also place the plate containing adapter indexes in the MiniHub. Choose &apos;Continue&apos; to resume the protocol.' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Constants:
var MAX_VOLUME = 170;
var MAX_MIX_VOLUME = 150;
var PRE_ASP_LARGE = 15;
var PRE_ASP_MEDIUM = 10;
var PRE_ASP_SMALL = 5;
// Get protocol parameters from global scope:
var global = GetGlobalObject();
if(global.runsetMode) global.updateRunset();
var columns = global.formColumns;
var headMode = &quot;1,2,1,&quot; + columns;
var tipColumn = global.settings.tipColumn || 1;
var reagentColumn = global.settings.reagentColumn || 1;
var timeMod = global.timeMod || 1;
var tempRt = global.tempRt || 20;
var sampleVolume = global.settings.sampleVolume || 32.5;
var reagentVolume = global.settings.reagentVolume || 5;
var bufferVolume = global.settings.bufferVolume || 5;
var adapterVolume = global.settings.adapterVolume || 2.5;
var incubationTemperature = global.settings.incubationTemperature || 30;
var doOffDeckIncubation = global.settings.doOffDeckIncubation;
var incubationTime = global.settings.incubationTime * timeMod;
var protocolName = global.formProtocol;

var dph = global.dph;

global.statusString = protocolName + &quot; started&quot;;' />
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=tempRt;' Value='' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=tempRt;' Value='' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 4' />
					</Devices>
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				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='signalMove1' />
					</Waitfors_To_Signal>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SamplePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotMix' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='SamplePlate' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='signalMove1' >
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				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(doOffDeckIncubation) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='SetTemperature' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Incubate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(doOffDeckIncubation) task.skip();
task.Incubationtime = incubationTime;' />
					<Parameters >
						<Parameter Category='' Name='Incubation time' Value='0' />
						<Parameter Category='' Name='Use relative timing' Value='0' />
						<Parameter Category='' Name='Allow plates to incubate at locations with BCRs' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(doOffDeckIncubation) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(!doOffDeckIncubation) task.skip();

task.Body = &quot;Take the Eppendorf plate from &quot; +
	&quot;position 5 of the Bravo deck, seal, place in a thermal &quot; +
	&quot;cycler and run the &quot; + protocolName + &quot; program. Once &quot; +
	&quot;the incubation has finished, return the plate to position 5 &quot;
	&quot;and choose &apos;Continue&apos;.&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Transfer plate' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ResetTemperature' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferStop' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReactionPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotMix' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotBuffer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReagentPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// New tipbox for dispensing master mix' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotMix' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotBuffer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 4, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='IndexPlate' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReagentTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotMix' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotBuffer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 2, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='SampleTips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferSample' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferStop' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SampleTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 4, slot 3' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='IndexPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotBuffer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferStop' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='StopPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Occupied' />
					<Parameter Name='Plate type' Value='96 Deep Well PP Sqr Well V Btm' />
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					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='AliquotBuffer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = bufferVolume;	// Volume to dispense per well
var maxTipVolume = MAX_VOLUME;	// Tip capacity
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 �L Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;3&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StopPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn+1]];
if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Tiptouchretractdistance = -14.5;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='15' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-tipColumn-1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;8&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='AliquotMix' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = reagentVolume;	// Volume to dispense per well
var maxTipVolume = MAX_VOLUME;	// Tip capacity
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);
' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 �L Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];
if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Tiptouchretractdistance = -14.5;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='15' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;9&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='ResetTemperature' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='// Dummy task
task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='ReactionPlate' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='task.Temperature = tempRt;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=tempRt;' Value='' />
						<Parameter Category='' Name='Wait' Value='' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 �L Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='task.Temperature = tempRt;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=tempRt;' Value='' />
						<Parameter Category='' Name='Wait' Value='' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='SetTemperature' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='if(doOffDeckIncubation) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='ReactionPlate' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
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					<TaskScript Name='TaskScript' Value='/* To reach the reaction temperature faster 
this initial step is used to raise temperature quickly.
Once reached the temperature is immediately lowered to
the actual reaction temperature.
*/
if(doOffDeckIncubation) task.skip();
task.Temperature = 58;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='58' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 �L Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='if(doOffDeckIncubation) task.skip();
task.Temperature = incubationTemperature;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=incubationTemperature;' Value='' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='if(!doOffDeckIncubation) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TransferSample' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 �L Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = PRE_ASP_SMALL;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = 0.5;
task.Volume = sampleVolume;
task.Dynamictipextension = dph(sampleVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='IndexPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='var mix_vol = 0.8 * (sampleVolume + adapterVolume);
if(mix_vol &gt; MAX_MIX_VOLUME) {
	mix_vol = MAX_MIX_VOLUME;
}
task.Volume = mix_vol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='IndexPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = 0.5;
task.Volume =  sampleVolume + adapterVolume;
task.Dynamictipextension = dph(sampleVolume+adapterVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='IndexPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume + adapterVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='var mix_vol = 0.8 * (sampleVolume + reagentVolume + adapterVolume);
if(mix_vol &gt; MAX_MIX_VOLUME) {
	mix_vol = MAX_MIX_VOLUME;
}
task.Volume = mix_vol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.75' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Blowout
task.Volume = PRE_ASP_SMALL;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-7' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TransferStop' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 �L Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = PRE_ASP_SMALL;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume + adapterVolume + reagentVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.75' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume + adapterVolume + reagentVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StopPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='var mix_vol = 0.8 * (sampleVolume + adapterVolume + reagentVolume);
if(mix_vol &gt; MAX_MIX_VOLUME) {
	mix_vol = MAX_MIX_VOLUME;
}
task.Volume = mix_vol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StopPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.75' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Blowout
task.Volume = PRE_ASP_SMALL;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StopPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-7' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>